PsychoPy2experiment version="2023.1.3"
Settings
  Audio latency priority = 0
  Audio lib = pyo
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2.5
  Window size (pixels) = [1280, 720]
  expName = Intentional Binding
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    PolygonComponent polygon
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 7.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 7.0
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  Routine beep
    SoundComponent sound_1
      sound [set every repeat] = $freq
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
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  Routine responses
    TextComponent display_text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Report the delay between the key press and beep sound (0-1000) in ms
        Use the Slider to pick the answer.
    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "100", "200", "300", "400", "500", "600", "700", "800", "900", "1000"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 40
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    conditions:
      [OrderedDict([('delay', 0.1), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.4), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.7), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.1), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.4), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.7), ('freq', 400), ('condition', 'exp')]),
      OrderedDict([('delay', 0.1), ('freq', 400), ('condition', 'exp')]),
      OrderedDict([('delay', 0.4), ('freq', 400), ('condition', 'exp')]),
      OrderedDict([('delay', 0.7), ('freq', 400), ('condition', 'exp')]),
      OrderedDict([('delay', 0.1), ('freq', 400), ('condition', 'exp')])]
    Routine trial
    Routine beep
    Routine responses
  LoopTerminator trials
